PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = interactive-slider
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent keyboard_code
      Code Type = Both
      Begin JS Routine:
        mykb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});
        mykb.start();
      Begin Routine:
        # a keyboard object (must differ from object used online)
        mykb = keyboard.Keyboard()
      Each Frame:
        # poll the keyboard
        keys = mykb.getKeys(keysWatched, waitRelease = False, clear = False)

        if len(keys):# if a key has been pressed
            for i, key in enumerate(keysWatched):
                if keys[-1].name == key:
                    if keys[-1].duration:
                        status[i] = 'up'
                        statusList.append('up')
                    else:
                        status[i] = 'down'
                        statusList.append('down')
      Each JS Frame:
        // Loop through keyboard events to update keyStates
        let keyEvents = mykb.getEvents();
        // Previous status of key we are currently watching
        let previousStatus = status[currentKey];
        // Key, timestamp, and keyDown, of current key event
        let keyIndex, key, keyStatus;
        for (let i = 0; i < keyEvents.length; i++) {
            // Current key event
            key = keyEvents[i].pigletKey;
            keyStatus = keyEvents[i].status === Symbol.for('KEY_DOWN')? 'down': 'up';
            // Index of this key in keysWatched. NB findIndex not supported by IE
            keyIndex = keysWatched.indexOf(key);
            // Key is one that we watch; update its status
            if (keyIndex !== -1) {
                status[keyIndex] = keyStatus;
                statusList.append(keyStatus)
                console.log('keyStatus')
                console.log(statusList)
            }
        }


        // Clear keyboard events
        mykb.clearEvents();
    CodeComponent slider_code
      Code Type = Py
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      Begin Routine:
        if slider_granularity == 0:
            slider_granularity = .1
        thisFrame = 0
        sliding = 0
        oldRating = -1
        slider_data=[]
        text_data.text=' '

        # which keys are we watching? (these will differ depending on handedness)
        keysWatched=['left', 'right', 'return']

        # what are the assumed key statuses at the start of the routine
        status =['up', 'up', 'up']

        # how many keyPresses have been counted so far
        keyCount = 0
        statusList = []

        mouseRec=mouse.getPos()
        currentKey=0
      Each Frame:
        if slider.markerPos and status[2] == 'down':
            continueRoutine=False
        elif slider.markerPos and mouse.isPressedIn(slider_shape):
            continueRoutine=False
        elif status[0] == 'down':
            sliding = -slider_granularity
        elif status[1] == 'down':
            sliding = slider_granularity
        # Move slider on hover
        elif slider_shape.contains(mouse) and mouse.getPos()[slider_orientation] != mouseRec[slider_orientation]:
            mouseRec=mouse.getPos()
            slider.markerPos=mouseRec[slider_orientation]/slider_width*(slider_ticks[-1]-slider_ticks[0])+(slider_ticks[0]+slider_ticks[-1])/2
            sliding = 0
        else:
            sliding = 0

        if sliding != 0:
            if oldRating == -1:
                slider.markerPos= (slider_ticks[0]+slider_ticks[-1])/2
            if thisFrame%slideSpeed == 0:
                slider.markerPos += sliding



        #Update slider text if needed
        if slider.markerPos:
            if oldRating != slider.markerPos:
                text_slider.text = str(round(slider.markerPos,slider_decimals))
                oldRating = slider.markerPos

        thisFrame += 1
        if slider.markerPos and thisFrame%slideSpeed==0:
            slider_data.append([round(oldRating,slider_decimals),int(t*1000)])
            text_data.pos=[.6,-.4+.017*len(slider_data)]
            text_data.text+='\n'+str(round(oldRating,slider_decimals))+' '+str(int(t*1000))
        #    text_data.setPos(.5,len(slider_data)*.1-.4)
      End Routine:
        thisExp.addData('All Responses',slider_data)
        thisExp.addData('Final Response',round(slider.markerPos,slider_decimals))
        print('All Responses',slider_data)
        print('Final Response',round(slider.markerPos,slider_decimals))
    PolygonComponent slider_shape
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (slider_width, slider_height)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = False
      granularity = slider_granularity
      labels = '1','2','3','4','5'
      letterHeight = 0.05
      ori = slider_orientation
      size = (slider_width, slider_height)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1,2,3,4,5)
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    TextComponent text_slider
      letterHeight = 0.06
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_data
      letterHeight = 0.03
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent slider_code2
      Code Type = Both
      Begin Experiment:
        Idx = 0
        for label in slider.labelObjs:
            label.height = .03  # Or whatever size you want
            label.wrapWidth = .2
            label.text=slider_labels[Idx]
            Idx+=1
        slider.marker.color=marker_colour
      Begin JS Experiment:
        slider.setLabels(slider_labels);
        slider.setLabelHeight(.03);
        //slider.setLabelWrapWidth(.2);
        slider._markerColor = new util.Color(marker_colour);
        slider._markerSize = (.1,.1);
        //slider._onChange(true)();
        //slider._setupSlider()
  Routine start
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
        Array.prototype.append = [].push;
      End JS Routine:
        experimentInit();
    CodeComponent slider_setup
      Code Type = Auto->JS
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      Begin Experiment:
        slider_width=.8
        slider_height=.1
        slider_orientation=0
        #Failing to set ticks or labels in code
        slider_ticks=[1,2,3,4,5]
        #slider_labels="Strongly Disagree,Disagree,Neither Agree nor Disagree,Agree,Strongly Agree"
        slider_labels=['0%','25%','50%','75%','100%']
        slider_granularity=.1
        slider_decimals=1
        sliding = 0
        slideSpeed = 10
        oldRating=-1
        marker_colour='blue'
        marker_size=.1
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Use the mouse or arrow keys.

        Press enter or click the mouse to submit.
    CodeComponent slider_colour
      Code Type = Both
      Begin Experiment:
        sliderColour='LightGray'
      Begin JS Experiment:
        sliderColour = new util.Color("LightGray");
  Routine end
    TextComponent text_end
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Fin
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    KeyboardComponent key_resp
      allowedKeys = 'q',
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine gap
    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine iSlider
    PolygonComponent slider_background
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (slider_width, slider_height)
      startVal [time (s)] = 0.0
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    CodeComponent keyboard_code_2
      Code Type = Py
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      Begin Routine:
        # a keyboard object (must differ from object used online)
        mykb = keyboard.Keyboard()
      Each Frame:
        # poll the keyboard
        keys = mykb.getKeys(keysWatched, waitRelease = False, clear = False)

        if len(keys):# if a key has been pressed
                    for i, key in enumerate(keysWatched):
                        if keys[-1].name == key and statusList[-1] != key:
                            if keys[-1].duration:
                                status[i] = 'up'
                                statusList.append(key)
                            else:
                                status[i] = 'down'
                                statusList.append(key)
                        else:
                            status[i] = 'up'
    CodeComponent iSlider_code
      Code Type = Py
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      Begin Experiment:
        ticks=[]
        for Idx in range(len(slider_labels)):
            ticks.append(visual.TextStim(win=win, name='label'+str(Idx),
                    text=slider_labels[Idx],
                    font='Arial',
                    pos=(slider_width*Idx/(len(slider_labels)-1)-slider_width/2,-1.333*slider_height),
                    height=0.03,
                    wrapWidth=slider_width/(len(slider_ticks)-1),
                    ori=0,
                    color=sliderColour
            ))
        for Idx in range(len(slider_ticks)):
            ticks.append(visual.ShapeStim(
                    win=win,
                    name='tick'+str(Idx),
                    lineColor=sliderColour,
                    fillColor=sliderColour,
                    vertices=[[-slider_height/20,slider_height/2],[slider_height/20,slider_height/2],[slider_height/20,-slider_height/2],[-slider_height/20,-slider_height/2]],
                    pos=(slider_width*Idx/(len(slider_ticks)-1)-slider_width/2,0),
                    lineWidth = 0,
                    opacity = 1,
                    interpolate = True
                    ))
      Begin Routine:
        if slider_granularity == 0:
            slider_granularity = .1
        thisFrame = 0
        sliding = -1
        oldRating = -999
        slider_data=[]
        newRating = -999

        # which keys are we watching? (these will differ depending on handedness)
        keysWatched=['1', '2', '7', '8', 'return']

        # what are the assumed key statuses at the start of the routine
        status =['up', 'up', 'up', 'up', 'up']

        # how many keyPresses have been counted so far
        keyCount = 0
        statusList = ['-1']

        mouseRec=mouse.getPos()
        currentKey=0
      Each Frame:
        if thisFrame == 0:
            for tick in ticks:
                tick.setAutoDraw(True)
        thisFrame += 1
        # End routine with keyboard
        if newRating > -999 and status[4] == 'down':
            continueRoutine=False
        # End routine with mouse
        elif newRating > -999 and mouse.isPressedIn(marker):
            continueRoutine=False
        # Move slider with keyboard
        elif status[0] != status[1]: #(status[0] == 'down' or  status[1] == 'up'):
            sliding = -slider_granularity
            newRating = round(newRating-abs(sliding),slider_decimals)
            #print("decrease rating" + str(newRating))
        elif status[2] != status[3]: # status[2] == 'down' or status[3] == 'down':
            sliding = slider_granularity
            newRating = round(newRating+abs(sliding)*.5,slider_decimals)
            print("increase rating" + str(newRating))
            #sliding = -slider_granularity
            # Move slider with mouse
        elif slider_background.contains(mouse) and mouse.getPos()[slider_orientation] != mouseRec[slider_orientation]:
            mouseRec=mouse.getPos()
            newRating = round((mouseRec[0]/slider_width*(slider_ticks[-1]-slider_ticks[0])+(slider_ticks[0]+slider_ticks[-1])/2),slider_decimals)
            sliding = 0
        # Do nothing / keep sliding
        else:
            sliding = -slider_granularity
            #print("no button pressed?")

        # Change rating using keyboard
        if sliding != 0 and thisFrame%slideSpeed == 0:
            # Allocate startpoint (midpoint or endpoint) if first interaction is keyboard
            if newRating == -999:
                newRating = round((slider_ticks[-1]),slider_decimals) #round((slider_ticks[0]+slider_ticks[-1])/2,slider_decimals)
            else:
                newRating = round(newRating+sliding,slider_decimals)
                status =['up', 'up', 'up', 'up', 'up']
                #print("status up")

        # Check newRating is in range
        if newRating > slider_ticks[-1]:
            newRating=slider_ticks[-1]
        elif newRating > -999 and newRating < slider_ticks[0]:
            newRating=slider_ticks[0]

        #Update slider text and marker if needed
        if oldRating != newRating:
            slider_text.text = str(newRating)
            oldRating = newRating
            marker.setWidth(slider_width*( (newRating-slider_ticks[0]) / (slider_ticks[-1]-slider_ticks[0])))
            marker.setPos([ (slider_width-marker.width) / -2,0])

        if newRating>-999 and thisFrame%slideSpeed==0:
            slider_data.append([round(oldRating,slider_decimals),int(t*1000)])
        #    text_data.setPos(.5,len(slider_data)*.1-.4)
      End Routine:
        thisExp.addData('All Responses',slider_data)
        thisExp.addData('Final Response',newRating)
        print('All Responses',slider_data)
        print('Final Response',newRating)
        for tick in ticks:
            tick.setAutoDraw(False)
    PolygonComponent slider_bar
      fillColor = LightGray
      lineColor = $[1,0,0]
      lineWidth = 0
      saveStartStop = False
      shape = rectangle
      size = (slider_width, slider_height/10)
      startVal [time (s)] = 0.0
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    PolygonComponent marker
      fillColor = $marker_colour
      lineColor = $marker_colour
      nVertices = 72
      saveStartStop = False
      shape = rectangle
      size = (slider_width, slider_height/20)
      startVal [time (s)] = 0.0
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    TextComponent slider_text
      letterHeight = 0.06
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine iSlider
    Routine gap
  LoopTerminator trials
  Routine end
